(AutomaticParameterEstimation "true")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "CenterOfGravity")
//(AutomaticTransformInitializationMethod "GeometricalCenter")
//(AutomaticTransformInitializationMethod "Origins")
(CheckNumberOfSamples "false")
(DefaultPixelValue 0)
(ErodeMask "false")
(FinalBSplineInterpolationOrder 3)
// (FinalGridSpacingInVoxels 8.0 8.0)
(FinalGridSpacingInVoxels 32 32)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(FixedInternalImagePixelType "float")
// (GridSpacingSchedule 6.0 6.0 4.0 4.0 2.5 2.5 1.0 1.0)
(HowToCombineTransforms "Compose")
(ImageSampler "RandomCoordinate")
(ImagePyramidSchedule  5 5)
//(Interpolator "LinearInterpolator")
(Interpolator "BSplineInterpolator")
(MaximumNumberOfIterations 500) 
// (MaximumStepLength 5)
(Metric "AdvancedMattesMutualInformation")
(MovingImagePyramid "MovingSmoothingImagePyramid")
// (MovingInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(NewSamplesEveryIteration "true")
(NumberOfHistogramBins 64)
(NumberOfResolutions 1) 
(NumberOfSpatialSamples 5000) 
(Optimizer "AdaptiveStochasticGradientDescent")
(Registration "MultiResolutionRegistration")
(ResampleInterpolator "FinalBSplineInterpolator")
// (ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
// Check this parameter
(ResultImagePixelType "unsigned short")
//(SP_a 10.0)
(Transform "AffineTransform")
(UseDirectionCosines "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(WriteResultImageAfterEachResolution "false")
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
