(AutomaticParameterEstimation "true")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "CenterOfGravity")
//(AutomaticTransformInitializationMethod "GeometricalCenter")
//(AutomaticTransformInitializationMethod "Origins")
(CheckNumberOfSamples "false")
(DefaultPixelValue 0)
(ErodeMask "false")
(FinalBSplineInterpolationOrder 4)
// (FinalGridSpacingInVoxels 8.0 8.0)
// Original: (FinalGridSpacingInVoxels 16 16)
(FinalGridSpacingInVoxels 32 32)
(FixedImagePyramid "FixedSmoothingImagePyramid")
//(FixedImagePyramid "FixedRecursiveImagePyramid")
(FixedInternalImagePixelType "float")
// (GridSpacingSchedule 6.0 6.0 4.0 4.0 2.5 2.5 1.0 1.0)
(HowToCombineTransforms "Compose")
(ImageSampler "RandomCoordinate")
(ImagePyramidSchedule 50 50) 
//(Interpolator "LinearInterpolator")
(Interpolator "BSplineInterpolator")
(MaximumNumberOfIterations 50) 
// (MaximumStepLength 4)
//(Metric "KNNGraphAlphaMutualInformation")
//(ImageSampler "MultiInputRandomCoordinate")
(Metric "AdvancedMattesMutualInformation")
//(Metric "NormalizedMutualInformation")
(MovingImagePyramid "MovingSmoothingImagePyramid")
//(MovingImagePyramid "MovingRecursiveImagePyramid")
(MovingInternalImagePixelType "float")
(NewSamplesEveryIteration "true")
(NumberOfHistogramBins 64)
(NumberOfResolutions 1) 
(NumberOfSpatialSamples 1000)
(Optimizer "AdaptiveStochasticGradientDescent")
(Registration "MultiResolutionRegistration")
(ResampleInterpolator "FinalBSplineInterpolator")
// (ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
// Check this parameter
(ResultImagePixelType "unsigned short")
//(SP_a 1000.0)
(Transform "TranslationTransform")
(UseDirectionCosines "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(WriteResultImageAfterEachResolution "false")
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
